metadata:
  name: example workflow
  author: Author
  info: extended info
  version: 0.1

# This should be an absolute path, replace when you use
workcell: rpl-workcell/demo-workcell/example_wc.yaml

modules:
  - name: ot2-1
  - name: pf400

flowdef:
  - name: Example ot2 command
    module: ot2
    command: run protocol
    args:
      config_path: path_to_config.yaml
      vars: { "time": 10 }
    checks: null

  - name: Move plate to sealer
    module: pf400
    command: move
    args:
      target: sealer
      source: ot2-1_deck1
      vars: { "time": 2 }
    checks: null
    comment: we can add comments if we wanted
