metadata:
  name: example workflow
  author: Author
  info: extended info
  version: 0.1

workcell: /home/rpl/wei_ws/src/rpl_workcell/pcr_workcell/pcr_workcell.yaml

modules:
  - name: pf400
  - name: sciclops
  - name: sealer
  - name: pealer

flowdef:
  #  - name: PCR Plate Exchange
  #  module: sciclops
  #  command: get_plate
  #  args:
  #    pos: "tower1"
  #  checks: null
  #  comment: Stage pcr plates

  - name: PCR to OT2
    module: pf400
    command: transfer
    args:
      pos1: [262.550, 20.608, 119.290, 662.570, 0.0, 574.367]
      pos2: [195.99, 60.21,  92.13,  565.41,   82.24,  -65.25]
    checks: null
    comment: Place plate in ot2

  # - name: Mix OT2 reactions
  #   module: ot2
  #   command: run_protocol
  #   args:
  #     config_path: pcr_workcell/protocol_files/ot2_pcr_config.yaml
  #   checks: RESOURCE_CHECK
  #   comment: resource check not implemented, but will be

  - name: Move plate to sealer
    module: pf400
    command: transfer
    args:
      pos1: [195.99, 60.21,  92.13,  565.41,   82.24,  -65.25]
      pos2: [231.788, -27.154, 313.011, 342.317, 0.0, 683.702]
      # target: sealer
      # source: sciclops_exchange
    checks: null
    comment: null

      #- name: Seal PCR plate
      # module: sealer
      #command: seal
      #args:
      #time: 3
      #temp: 175
      #checks: null

  # - name: Thermocycle
  #   module: biometra
  #   command: thermocycle
  #   args:
  #     protocol_file: pcr_workcell/protocol_files/biometra_protocol.yaml
  #   checks: null
  #   comment: null

  - name: Move to peeler
    module: pf400
    command: transfer
    args:
      pos1: [231.788, -27.154, 313.011, 342.317, 0.0, 683.702]
      pos2: [264.584, -29.413, 284.376, 372.338, 0.0, 651.621]
    checks: null
    comment: null

      # - name: Peel
      #module: peeler
      #command: peel
      #args: {}
      #checks: null
      #comment: null

  - name: Move to final destination
    module: pf400
    command: transfer
    args:
      pos1: [264.584, -29.413, 284.376, 372.338, 0.0, 651.621]
      pos2: [262.550, 20.608, 119.290, 662.570, 0.0, 574.367]
    checks: null
    comments: null
